<CompuCell3D Revision="20190101" Version="4.2.5">
   
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>50</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="500" y="500" z="1"/>
      <Steps>1800</Steps>
      <Temperature>5.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell"/>
      <CellType TypeId="2" TypeName="ECMFiber"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Cell" LambdaVolume="5.0" TargetVolume="100"/>
      <VolumeEnergyParameters CellType="ECMFiber" LambdaVolume="100.0" TargetVolume="15"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="Cell" LambdaSurface="2.0" TargetSurface="35"/>
      <SurfaceEnergyParameters CellType="ECMFiber" LambdaSurface="50.0" TargetSurface="20"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0</Energy>
      <Energy Type1="Medium" Type2="Cell">15</Energy>
      <Energy Type1="Medium" Type2="ECMFiber">0</Energy>
      <Energy Type1="Cell" Type2="Cell">5</Energy>
      <Energy Type1="Cell" Type2="ECMFiber">10</Energy>
      <Energy Type1="ECMFiber" Type2="ECMFiber">1</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="CenterOfMass"/>
   
   <Plugin Name="Secretion"/>
   
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="MMP">
         <DiffusionData>
            <FieldName>MMP</FieldName>
            <DiffusionConstant>0.05</DiffusionConstant>
            <DecayConstant>0.005</DecayConstant>
         </DiffusionData>
      </DiffusionField>
   </Steppable>
   
</CompuCell3D>
